OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter => #1
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.062500
-> Signal Power Log
-> Feature aggregator
-> Level measure
Data=#1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
